PsychoPy2experiment version="2026.2.4"
Settings
  expName = untitled
  runMode = 1
  Experiment info = {"participant":"f\"{randint(0, 999999):06.0f}\"","session":"001"}
  Monitor = testMonitor
  Screen = 1
  Full-screen window = True
  Window size (pixels) = (1024, 768)
  Units = height
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
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    CodeComponent fiftyfifty
      Code Type = Auto->JS
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      Begin Routine:
        if random()> 0.5: #50 50 probability
            direction= -level
            corr_resp= 'left'
        else:
            direction= level
            corr_resp= 'right'
      End Routine:
        thisExp.addData('corrAns',corr_resp)
        thisExp.addData('signedIntensity',direction)
        thisExp.addData('key_resp.corr',key_resp.corr)
    PolygonComponent fixation
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      fillColor = white
      size = (0.1, 0.1)
      ori [set every repeat] = 0
      shape = triangle
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    GratingComponent grating
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.3
      size = (0.3, 0.3)
      ori [set every repeat] = direction
      tex = sin
      mask = gauss
      sf = 8
      contrast = 0.5
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    KeyboardComponent key_resp
      startVal [time (s)] = 0.5
      forceEndRoutine = True
      allowedKeys = 'left','right'
      storeCorrect = True
      correctAns = $corr_resp
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  Routine instructions
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    TextComponent text
      startVal [time (s)] = 0
      text = Welcome, Your task is to press left arrow key if you see a left tilt and right arrow key if you see a right tilt. Press space to start. Good luck!
      letterHeight = 0.05
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    KeyboardComponent Response
      startVal [time (s)] = 0
      forceEndRoutine = True
      allowedKeys = 'space'
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  Routine Thanks
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    TextComponent thanks
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text = Thank you!
      letterHeight = 0.05
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Flow
  Routine instructions
  LoopInitiator trials_3 loopType="StairHandler"
    nReps = 10
    start value = 10
    max value = 20
    min value = 1
    step sizes = (4,2,2,1)
    step type = lin
    N up = 1
    N down = 3
    N reversals = 2
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    Routine trial
  LoopTerminator trials_3
  Routine Thanks
